// MRI ArgoJ Tool Set Verion 2.1
// Marc LARTAUD MRI PHIV
// Boite a outils pour faciliter les analyses metrologiques avec la lame Argolight test7

/*

A installer :
- loci_tools.jar Pour lire tous les formats d images
http://downloads.openmicroscopy.org/bio-formats/5.3.2/artifacts/loci_tools.jar
- pour le calcul du plus proche voisin:
https://icme.hpc.msstate.edu/mediawiki/images/9/9a/Nnd_.class

- Objects counter 3D
http://imagejdocu.tudor.lu/lib/exe/fetch.php?media=plugin:analysis:3d_object_counter:3d-oc_.jar
- PDF Writer- 
https://imagej.nih.gov/ij/plugins/download/PDF_Writer.class
http://www.coderanch.com/how-to/content/iText-2.1.7.jar

//Outil parametres
	pour remttre tout a zero
	pour rentrer les renseignements (plateau verificateur microscope ....)
	en fonction dun fichier parametres_microscopes.csv personnalible en respectant les noms 
	("end" en fin d infos pour un microscope)
	a mettre dans \ImageJ\macros\toolsets\ArgoloJ


// Outil calibration
	pour verifier la calibration spatiale du microscope
	ou calibrer si c est pas deja fait

// Outil homogeneite 
	"Gaussian Blur...", "sigma=1"
	en option elimination  de la croix
	"Maximum...", "radius=diagonale entre points
	"Gaussian Blur...", "sigma=moitie entre points
	image 0-100 % tout les 10%
	
// Outil Coalignement 
	detection des points
	pour chaque canal 
		3D objects counter
		mesure du centre de masse xm ym zm
	calcul des distances
	tableau resultats avec moyennes

// Outil dispersion
	3D objects counter
	calcul de distance entre z

// Outil Resolution
	detection des bandes 
	rotation de l image
	selection d une partie de l image
	plot profile
	detection des maxima
	calcul du nombre de bandes resolues
	
// Outil Linearite
	segmentation des plages (16 carres ou 2*16 bandes)
	mesures d intensites
	courbes de regression (avec la courbe d etalonnage)
	
// Geometrie
	calcul le decalage du repositionnement de la platine

// Rapport PDF
	creation et sauvegarde d un rapport

*/

/* parametres_microscopes.csv est un fichier de configuration specifique a chaque plateau avec 
le nom du plateau
les verificateurs
les microscopes avec leur objectifs et les differents canaux
la fin des infos sur un microscope est signalee par : end */


//variables glogales

	var dir_argoloj=getDirectory("macros")+"toolsets\\ArgoloJ\\";
	var param=dir_argoloj+"parametres_microscopes.csv";
	var plateau=RecupPlateau();
	var NomMicroscope="";
	var TypeMicroscope="";
	var NomObjectif="";
	var NaObjectif="";
	var NomVerificateur="";
	var Infos=false;
	var wave=newArray(0); //tableau des longueurs d ondes
	var wave_value=newArray(0);
	var zero="Oui";
	var date="";
	var datef="";
	//Valeurs d etalonnage donnees par argolight avec la lame
	var Argo_intensites_16 = newArray(1,1.49,2.18,2.99,3.71,4.46,5.18,5.79,6.27,6.88,7.4,7.85,8.18,8.65,9.1,9.55);
	var Argo_intensites_32 = newArray(1,1.52,2.23,3.07,3.91,4.68,5.41,6.05,6.64,7.25,7.78,8.25,8.71,9.18,9.63,10.02);

	var title1 = "Resultats Argolight";
	var title2 = "["+title1+"]";
	var fe = title2;

	// parametres par defaut
	var seuil_calibration=newArray("Li",100,255);
	var seuil_homogeneite=newArray("Otsu",100,255);
	var seuil_coalignement_tot=newArray("Default",100,255);
	var seuil_coalignement=newArray("Yen",100,255,1);
	var seuil_dispersion=newArray("Minimum",100,255);
	var seuil_resolution=newArray("Default",100,255);
	var seuil_geometrie=newArray("Default",100,255);
	var radius_calibration=1;
	var radius_homogeneite=1;
	var radius_coalignement=2;
	var radius_dispersion=3;
	var radius_resolution=20;
	var radius_linearite=2;
	var taille_calibration=newArray(50,500);
	var taille_homogeneite=newArray(20,100);
	var taille_coalignement=newArray(0.5,10,1);
	var taille_resolution=newArray(2,10000);
	var taille_linearite=newArray(200,1000000);

	var croix=false;
	
	//Resultats
	//var distance_calibration=0;
	//var std_calibration=0;
	var std_homo=0;
	var Tab_entete=newArray(0);	
	var Tab_result_moy=newArray(0);
	var Tab_ref_resolution=newArray(0);
	var distance_z_dispersion=0;
	var bande_resolution=0;
	var decalage_geometrie=0;
	var unit=0;
	

macro "AutoRun"{
	setTool("rectangle");
	setForegroundColor(255, 255, 255);//premier plan blanc
	setBackgroundColor(0,0,0);// fond noir
	run("Set Measurements...", "area mean centroid center feret's limit redirect=None decimal=9");
	run("Set 3D Measurements", "volume mean_gray_value centroid centre_of_mass dots_size=5 font_size=10 show_numbers white_numbers store_results_within_a_table_named_after_the_image_(macro_friendly) redirect_to=none");
	requires("1.49p");
	MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec");
	MonthNamesf = newArray("01","02","03","04","05","06","07","08","09","10","11","12");
	getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
	date="";
	if (dayOfMonth<10) date = date+"0";
	date = date+dayOfMonth+"-"+MonthNames[month]+"-"+year;
	if (dayOfMonth<10) dayOfMonth="0"+dayOfMonth;
	datef = "-"+year+"-"+MonthNamesf[month]+"-"+dayOfMonth;
	efface_images_temp();
	
	
	
}

///////////////////////////////////////////////////////////param//////////////////////////////////////////////////////

macro "Parametres Action Tool - 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"{
	/*Dialog.create("RAZ");
	Dialog.addCheckbox("Remettre les parametres a zero ", true);
	Dialog.show();
	raz = Dialog.getCheckbox(); 
	print(raz);*/
	
	Dialog.create("raz");
	Dialog.addChoice("Remise a zero ",newArray("Oui", "Non"));
	Dialog.show();
	zero = Dialog.getChoice();
	
	if (zero=="Oui") {
			raz_variables();
			efface_images_temp();			
	}
	
	
	infos();
	
	print(plateau);
	print(NomVerificateur);
	print(NomMicroscope);
	print(TypeMicroscope);
	print(NomObjectif);
	print(NaObjectif);
	//Array.show(wave);
	//Array.show(wave_value);
	


}



//////////////////////////////////////////////////////////////////////Calibration//////////////////////////////////////

macro "Calibration Action Tool - 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"{
	raz("calibration");
	origid=getImageID();
	dir=getInfo("image.directory");
	Stack.getDimensions(width, height, channels, slices, frames);
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Duplicate...", "title=calibration duplicate");
	if (channels>1)run("Hyperstack to Stack");
	if ((channels+slices)>2){
		run("Z Project...", "projection=[Max Intensity]");
		selectWindow("calibration");
		close();
		selectWindow("MAX_calibration");
		rename("calibration");
		}
	run("Gaussian Blur...", "sigma="+radius_calibration);//lissage
	run("8-bit");
	seuillage (seuil_calibration,0);
	//setAutoThreshold("Li dark");	
	run("Analyze Particles...", "size="+taille_calibration[0]+"-"+taille_calibration[1]+" pixel display clear add");//taille des points en pixels 
	run("Nnd ");
	selectWindow("Nearest Neighbor Distances"); //Calcul des plus proches voisins
	str = getInfo("window.contents");
	extraction = newArray(0);
	lines=split(str, "\n");   // split  d un fichier texte en lignes
	for(i=1; i<lines.length; i++) {		
		line = lines[i];				
		columns = split(line, "\t");	
		extract = columns[1];											
		extraction = Array.concat(extraction, extract);	
		}
	Array.getStatistics(extraction, min, max, mean, stdDev);
	
	//Array.show(extraction);
	selectImage(origid);
	// si l image n est pas calibree
	if (pixelWidth==1){
	calib=20/mean; // 20 = distance entre points
	run("Set Scale...", "distance=1 known="+calib+" pixel=1 unit=micron");	
		} 
	else{
		print ("Distance moyenne :"+mean);
		print ("Ecart type :"+stdDev);	
	}
	
}


macro 'Calibration Action Tool Options'  {
	Dialog.create("Calibration");
	Dialog.addNumber("Taille du filtre:", radius_calibration);
  	Dialog.addChoice("Seuillage:", newArray("Manuel","Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen"),seuil_calibration[0]);
	Dialog.addSlider("Surface mini en px", 1, 10000, taille_calibration[0]);
	Dialog.addSlider("Surface maxi en px", taille_calibration[0], 10000, taille_calibration[1]);
	Dialog.addCheckbox("Valeurs par defaut", false);
	Dialog.show();  
	radius_calibration=Dialog.getNumber();	
    seuil_calibration[0]=Dialog.getChoice();
	taille_calibration[0]=Dialog.getNumber();
	taille_calibration[1]=Dialog.getNumber();	
	if(Dialog.getCheckbox()){
		seuil_calibration=newArray("Li",100,255);
		radius_calibration=1;
		taille_calibration=newArray(50,500);	
	}
	}



//////////////////////////////////////////////////////////////////////Homogeneite//////////////////////////////////////
macro "Homogeneite Action Tool - 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"{
	raz("homogeneite");
	origid=getImageID();
	dir=getInfo("image.directory");
	Stack.getDimensions(width, height, channels, slices, frames);
	getPixelSize(unit, pixelWidth, pixelHeight);
	if (channels>1)exit ("Faire l analyse sur un canal");
	inter_point=20/pixelWidth; //Distance entre points
	run("Select None");
	run("Duplicate...", "title=homogeneite duplicate");
	
	if ((channels+slices)>2){
		run("Z Project...", "projection=[Max Intensity]");
		selectWindow("homogeneite");
		close();
		selectWindow("MAX_homogeneite");
		rename("homogeneite");
		}
	run("Gaussian Blur...", "sigma="+radius_homogeneite);//lissage
	if(croix){
		seuillage (seuil_homogeneite,0);
		//setAutoThreshold("Otsu dark");;
		n1=roiManager("count");
		run("Analyze Particles...", "size="+taille_homogeneite[0]+"-"+taille_homogeneite[1]+" add");//taille de la croix
		n2=roiManager("count");
		if (n2!=n1){ //si il y  une croix
			roiManager("Select", n2-1);
			run("Subtract...", "value=65000"); //efface
			roiManager("Delete");
		}
		run("Select None");
		resetThreshold();
	}
	run("Maximum...", "radius="+(inter_point*1.22)); // taille du filtre diagonale entre points
	run("Duplicate...", "title=temp duplicate");
	run("32-bit");
	getStatistics(area, mean, min, max, std, histogram);
	run("Divide...", "value="+max/100); //Normalisation en pourcentage
	getStatistics(area, mean, min, max, std, histogram);
	std_homo=std;
	close();
	selectWindow("homogeneite");
	run("Gaussian Blur...", "sigma="+(inter_point/2));// taille du filtre diagonale sur 2
			// 10 classes de valeurs
	run("32-bit");
	getStatistics(area, mean, min, max, std, histogram);
	run("Divide...", "value="+max); //--> valeurs de 0 a 1
	run("Multiply...", "value=10"); //--> valeurs de 0 a 10
	run("Conversions...", " ");
	run("8-bit");
	getStatistics(area, mean, min, max, std, histogram);
	print("Deviation standard normalisee de l homogeneite: "+std_homo); // calcul sur des valeurs de 1 a 10
	
	run("Multiply...", "value=25.5");
	run("Conversions...", "scale");	
	run("Size...", "width=800 height=800 constrain average interpolation=Bilinear");
	//print(dir_argoloj+"homogeneite.jpg");
	saveAs("Jpeg", dir_argoloj+"homogeneite.jpg");	

}


macro 'Homogeneite Action Tool Options'  {
	Dialog.create("Homogeneite");
	Dialog.addNumber("Taille du filtre:", radius_homogeneite);
  	Dialog.addChoice("Seuillage:", newArray("Manuel","Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen"),seuil_homogeneite[0]);
	Dialog.addSlider("Surface de la croix mini", 1, 500, taille_homogeneite[0]);
	Dialog.addSlider("Surface de la croix maxi", taille_homogeneite[0], 500, taille_homogeneite[1]);
	Dialog.addCheckbox("Croix centrale a enlever", croix);
	Dialog.addCheckbox("Valeurs par defaut", false);
	Dialog.show();
	radius_homogeneite=Dialog.getNumber();    
    seuil_homogeneite[0]=Dialog.getChoice();
	taille_homogeneite[0]=Dialog.getNumber();
	taille_homogeneite[1]=Dialog.getNumber();
	croix=Dialog.getCheckbox();
	raz_value=Dialog.getCheckbox();
	if(raz_value){
		seuil_homogeneite=newArray("Otsu",100,255);
		radius_homogeneite=1;
		taille_homogeneite=newArray(20,100);
		croix=false;		
	}
   }


/////////////////////////////////////////////////////////////////////Coalignement///////////////////////////////////////


macro "Coalignement Action Tool - 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"{
	raz("temp");
	raz("MAX_temp");
	raz("coal_result");
	if (!Infos) infos();
	origid=getImageID();
	dir=getInfo("image.directory");
	Stack.getDimensions(width, height, channels, slices, frames);
	width_stack=width;
	height_stack=height;
	getVoxelSize(width, height, depth, unit);
	inter_point=20/width; //Distance entre points
	run("Duplicate...", "title=temp duplicate");
	run("Hyperstack to Stack");
	run("Z Project...", "projection=[Max Intensity]");
	run("Subtract Background...", "rolling=50");
	selectWindow("temp");
	close();
	selectWindow("MAX_temp");
	run("Median...", "radius=2");
	run("Subtract Background...", "rolling=50");
	seuillage (seuil_coalignement_tot,0);
	//setAutoThreshold("Default dark");
	run("Analyze Particles...", "size="+taille_coalignement[0]+"-"+taille_coalignement[1]+" add"); //selection des points
	selectWindow("MAX_temp");
	close();
	count=roiManager("count");
	Tab_result_total=newArray(0);
	Tab_ref_resolution=newArray(0);
	Tab_nom_couple=newArray(0);
	combinaisons=0;
	if(TypeMicroscope=="WideField") facteur=2;
	if(TypeMicroscope=="Confocal") facteur=1.4;
		for (i=0;i<channels-1;i++){
			for(j=i+1;j<channels;j++){
				combinaisons++;
				ref_a=(facteur*wave_value[i]/pow(NaObjectif,2))/1000;
				ref_b=(facteur*wave_value[j]/pow(NaObjectif,2))/1000;
				if (ref_a>ref_b) Tab_ref_resolution=Array.concat(Tab_ref_resolution,ref_a);
				else Tab_ref_resolution=Array.concat(Tab_ref_resolution,ref_b);	
				Tab_nom_couple=Array.concat(Tab_nom_couple,wave[i]+"-"+wave[j]);
				}
			}
		//Array.show(Tab_ref_resolution);
	//newImage("coal_result", "32-bit composite-mode ", width_stack, height_stack, 1 , combinaisons, 1);
	newImage("coal_result", "RGB color-mode ", width_stack, height_stack, 1 , combinaisons, 1);
	//boucle sur les selections de points
	for(k=0;k<count;k++){
		selectImage(origid);
		Tab_xm_tot=newArray(0); // tableaux de tous les resultats
		Tab_ym_tot=newArray(0);
		Tab_zm_tot=newArray(0);		
		roiManager("Select", k);
		List.setMeasurements;
		x_roi=List.getValue("XM")/width;
		y_roi=List.getValue("YM")/height;
				
		run("Enlarge...", "enlarge=4");// agrandit la selection pour dupliquer
		setBatchMode(true);		
		for (c=1;c<=channels;c++){
				selectImage(origid);
				Tab_xm=newArray(0); // tableaux des resultats par points
				Tab_ym=newArray(0);
				Tab_zm=newArray(0);
				run("Duplicate...", "title=ch"+c+" duplicate channels="+c);
				run("8-bit");
				run("Median...", "radius="+radius_coalignement);
				setSlice( nSlices/2);
				setAutoThreshold(seuil_coalignement[0]+" dark");
				/*
				if(slices>1) seuillage (seuil_coalignement,1);//setAutoThreshold("Default dark stack");
				else seuillage (seuil_coalignement,0);//setAutoThreshold("Default dark");*/
				getThreshold(lower, upper);
				taille_mini_vx=taille_coalignement[2]/(width*height*depth);
				run("3D object counter...", "threshold="+lower+" slice="+slices/2+" min.="+taille_mini_vx+" max.=14092848 statistics");
				
				// recuperation des data
				titre="Statistics for ch"+c;
				Tab_xm=tableau_fenetre_texte(titre,18);if(Tab_xm.length!=1)	exit ("Nombre d objets incorrect!");
				Tab_ym=tableau_fenetre_texte(titre,19);
				Tab_zm=tableau_fenetre_texte(titre,20);
				selectWindow("ch"+c);
				close();
				selectWindow(titre);
				run("Close"); 
				Tab_xm_tot= Array.concat(Tab_xm_tot,Tab_xm);
				Tab_ym_tot= Array.concat(Tab_ym_tot,Tab_ym);
				Tab_zm_tot= Array.concat(Tab_zm_tot,Tab_zm);	
			}
	
		if(Tab_xm_tot.length!=channels||Tab_ym_tot.length!=channels||Tab_zm_tot.length!=channels)	exit ("Pas le bon nombre d objets!");
		Tab_entete=newArray(0);	
		Tab_result=newArray(0);
		
		
		n=0;
		for (i=0;i<channels-1;i++){
			for(j=i+1;j<channels;j++){
			n++;
				//sqrt[(Xa-Xb)²+(Ya-Yb)²+(Za-Zb)²] calcul de la distance euclidienne
			x=	(Tab_xm_tot[i]-Tab_xm_tot[j])*width;
			y=	(Tab_ym_tot[i]-Tab_ym_tot[j])*height;
			z=	(Tab_zm_tot[i]-Tab_zm_tot[j])*depth;
				
			delta= sqrt(pow(x,2)+pow(y,2)+(pow(z,2)));
			selectWindow("coal_result");
			Stack.setSlice(n); 
			set_px=(delta/Tab_ref_resolution[n-1]);
			//print (Tab_ref_resolution[n-1]);
			//set_px=(delta/seuil_resolution);
			//set_px=parseInt(set_px);
			//print (set_px);
			if(set_px<=1) set_px=0;
			else if(set_px<0.4) set_px=1;
			else if(set_px<0.6) set_px=2;
			else if(set_px<0.8) set_px=3;
			else if(set_px<1) set_px=4;
			else if(set_px<1.2) set_px=5;
			else if(set_px<1.4) set_px=6;
			else if(set_px<1.6) set_px=7;
			else if(set_px<1.8) set_px=8;
			else  set_px=9;
			
			
			r=256*256*255;
			v=256*255;
			b=255;
			tab_color=newArray(v,r+256*255,r+256*210,r+256*180,r+256*150,r+256*120,r+256*90,r+256*60,r+256*30,r);
			set_px=tab_color[set_px];
			setPixel(x_roi, y_roi, set_px);
			//setMetadata("Label", "Delta C"+i+1+" C"+j+1);
			//Tab_entete=Array.concat(Tab_entete,"Delta C"+i+1+" C"+j+1);
			setMetadata("Label", Tab_nom_couple[n-1]);
			Tab_entete=Array.concat(Tab_entete,Tab_nom_couple[n-1]);
			
			Tab_result=Array.concat(Tab_result,delta);
			Tab_result_total=Array.concat(Tab_result_total,delta);
			}
			}
			// Tableau de resultat
			if( !isOpen("Resultats Argolight")){
				run("Table...", "name="+title2+" width=1400 height=600");
				result="\\Headings: Roi          ";
				for (h=0; h<Tab_entete.length; h++){
					result=result+" \t"+Tab_entete[h];
					}
				print(fe, result);
		}
		result=""+(k+1);
		for (r=0; r<Tab_result.length; r++){
				result=result+" \t"+Tab_result[r];
			}
		print(fe,result);
	} // fin de boucle sur les roi	
	selectWindow("coal_result");
	run("Maximum...", "radius="+(inter_point/2)+" stack");
	
	
	
		Tab_result_moy=newArray(Tab_result.length);
		
		result="";
		for (i=1; i<Tab_result_moy.length; i++){
				result=result+" \t"+"";
			}
		print(fe,result);
		
		//stat		
		for (i=0; i<Tab_result.length; i++){
			moy=0;
			for (j=0; j<Tab_result_total.length; j=j+Tab_result.length){
				moy=moy+Tab_result_total[j+i];			
			}
			moy=moy/count;
			Tab_result_moy[i]=moy;			
		}
		result="Moyenne";
		for (i=0; i<Tab_result_moy.length; i++){
			result=result+" \t"+Tab_result_moy[i];
			}
		print(fe,result);	
		result="Reference";
		for (i=0; i<Tab_result_moy.length; i++){
			result=result+" \t"+Tab_ref_resolution[i];
			}
		print(fe,result);			
		
		
		setBatchMode(false);
		selectWindow("coal_result");
		//run("Duplicate...", "title=temp duplicate");
		run("Size...", "width=300 height=300 constrain average interpolation=Bilinear");
		run("Make Montage...", "columns=n rows=1 scale=1 label");
		
		run("Size...", "width=1800 height=300 constrain average interpolation=Bilinear");
	//print(dir_argoloj+"homogeneite.jpg");
	saveAs("Jpeg", dir_argoloj+"coalignement.jpg");
	selectWindow("coal_result");
	close();	

		
		
		run("Select None");
	
	
}

macro 'Coalignement Action Tool Options'  {
	Dialog.create("Coalignement");
	Dialog.addNumber("Taille du filtre:", radius_coalignement);
  	Dialog.addChoice("Seuillage:", newArray("Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen"),seuil_coalignement[0]);
	Dialog.addSlider("Surface mini", 0.1, 50, taille_coalignement[0]);
	Dialog.addSlider("Surface maxi", taille_coalignement[0], 50, taille_coalignement[1]);
	Dialog.addSlider("Volume 3D mini(µm3)", 0.01, 10, taille_coalignement[2]);
	Dialog.addCheckbox("Valeurs par defaut", false);
	Dialog.show();
	radius_coalignement=Dialog.getNumber();    
    seuil_coalignement[0]=Dialog.getChoice();
	taille_coalignement[0]=Dialog.getNumber();
	taille_coalignement[1]=Dialog.getNumber();	
	taille_coalignement[2]=Dialog.getNumber();
defaut_value=	Dialog.getCheckbox();
	if(defaut_value){
		seuil_coalignement_tot=newArray("Default",100,255);
		seuil_coalignement=newArray("Yen",100,255,1);
		radius_coalignement=2;
		taille_coalignement=newArray(0.5,10,1);		
	}
   }

////////////////////////////////////////////////////////////////Dispersion////////////////////////////////////////////



macro "Dispersion Action Tool - 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"{
	
	origid=getImageID();
	raz("dispersion");
	
	if (isOpen("Objects map of dispersion")){
		selectWindow("Objects map of dispersion");
		close();
		}
	dir=getInfo("image.directory");
	Stack.getDimensions(width, height, channels, slices, frames);
	getVoxelSize(width, height, depth, unit);
	if (channels>1)exit ("Faire l analyse sur un canal");
	run("Duplicate...", "title=dispersion duplicate");
	run("8-bit");
	//setSlice(slices/2);	
	run("Fire");
	run("Median...", "radius="+radius_dispersion+" stack");
	run("Enhance Contrast...", "saturated=0.3 normalize process_all use");
	seuillage (seuil_dispersion,1);
	//setAutoThreshold("Minimum dark stack");
	getThreshold(lower, upper);
	run("3D object counter...", "threshold="+lower+" slice="+slices/2+" min.=100 max.=14092848 objects statistics");
	selectWindow("Objects map of dispersion");
	run("Multiply...", "value=10 stack");
	setSlice(slices/2);	
	//recup data
	
	extraction = newArray(0);
	//extraction=tableau_fenetre_texte("Statistics for dispersion",20);
	selectWindow("Statistics for dispersion");
	str = getInfo("window.contents");
	lines=split(str, "\n");   // split  d un fichier texte en lignes
	if (lines.length==23){     //22 + label
		for(i=0; i<lines.length; i++) {		
			line = lines[i];				
			columns = split(line, "\t");	
			extract = parseInt(columns[20]);											
			extraction = Array.concat(extraction, extract);	
			}
		Array.getStatistics(extraction, min, max, mean, stdDev);
		distance_z_dispersion=(max-min)*depth;
		print("Distance entre z: "+distance_z_dispersion+" "+unit);
	} 
	else exit ("Il n y a pas les 22 objets!");
	selectWindow("Statistics for dispersion");
	
	run("Close"); 
	selectWindow("dispersion");
	setSlice(slices/2);
	run("Find Maxima...", "noise=1000 output=[Point Selection]");
	getSelectionCoordinates(xpoints, ypoints);
	x=xpoints[0];
	y=ypoints[0];
	run("Orthogonal Views");
	Stack.setOrthoViews(x, y, slices/2);
	selectWindow("XZ "+y);
	saveAs("Jpeg", dir_argoloj+"dispersion.jpg");
	//Stack.stopOrthoViews;
}

macro 'Dispersion Action Tool Options'  {
	Dialog.create("Dispersion");
	Dialog.addNumber("Taille du filtre:", radius_dispersion);
  	Dialog.addChoice("Seuillage:", newArray("Manuel","Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen"),seuil_dispersion[0]);
	Dialog.show();  
	radius_dispersion=Dialog.getNumber();	
    seuil_dispersion[0]=Dialog.getChoice();
   }

////////////////////////////////////////////////////////////////Resolution////////////////////////////////////////////



macro "Resolution Action Tool - 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"{
	raz("resolution");
	origid=getImageID();
	dir=getInfo("image.directory");
	Stack.getDimensions(width, height, channels, slices, frames);
	//Choix de la slice la plus intense	
	index_slice=1;
	index_channel=1;
	int_max=0;
		for (i=1;i<=slices;i++){
			for(j=1;j<=channels;j++){
				Stack.setSlice(i);
				Stack.setChannel(j);
				getStatistics(area, mean, min, max, std, histogram);
				if (mean>int_max) {
					int_max=mean;
					index_slice=i;
					index_channel=j;
					}					
			}			
		}	
	Stack.setSlice(index_slice);
	Stack.setChannel(index_channel);
	run("Plots...", "width="+width+120+" height=400 font=12 draw draw_ticks minimum=0 maximum=0 interpolate");
	run("Duplicate...", "title=resolution");
	run("Duplicate...", "title=temp");// pour redresser l image trouve l angle de rotation
	run("Median...", "radius="+radius_resolution);
	seuillage (seuil_resolution,0);
	//setAutoThreshold("Default dark");
	run("Analyze Particles...", "size="+taille_resolution[0]+"-"+taille_resolution[1]+" add");
	count=roiManager("count");
	roiManager("Select", count-1);
	List.setMeasurements;
	angle=List.getValue("FeretAngle");
	milieu=List.getValue("Y");
	roiManager("Deselect");
	roiManager("Delete");
	close();
	// PlotProfile sur l originale apres rotation
	selectWindow("resolution");
	run("Rotate... ", "angle="+(angle-90)+" grid=1 interpolation=Bilinear"); //rotation
	run("Specify...", "width="+width+" height="+height/2+" x=0 y="+(milieu+200));
	profile = getProfile();
	run("Plot Profile");
	/*newImage("listplotprofile", "16-bit black", profile.length, 1, 1);
	for (i=0; i<profile.length; i++){
		setPixel(i, 0,  profile[i]);
	}
	selectWindow("listplotprofile");
	run("Find Maxima...", "noise=20 output=[Point Selection]");*/
	selectWindow("Plot of resolution");
	saveAs("Jpeg", dir_argoloj+"resolution.jpg");
	maxima=Array.findMaxima(profile, radius_resolution);
	bande_resolution=maxima.length-30;
	bande_resolution=validation_nombre("Nombre de bandes resolues :",bande_resolution,0,10);
	print("Nombre de bandes resolues ="+bande_resolution); //4 maxima pour une bande resolue (10 bandes)
}

macro 'Resolution Action Tool Options'  {
	Dialog.create("Resolution");
	Dialog.addNumber("Taille du filtre:", radius_resolution);
  	Dialog.addChoice("Seuillage:", newArray("Manuel","Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen"),seuil_resolution[0]);
	Dialog.addSlider("Surface mini", 1, 20000, taille_resolution[0]);
	Dialog.addSlider("Surface maxi", taille_resolution[0], 20000, taille_resolution[1]);
	Dialog.addCheckbox("Valeurs par defaut", false);
	Dialog.show();   
	radius_resolution=Dialog.getNumber();	
    seuil_resolution[0]=Dialog.getChoice();
	taille_resolution[0]=Dialog.getNumber();
	taille_resolution[1]=Dialog.getNumber();	
	if(Dialog.getCheckbox()){
		seuil_resolution=newArray("Default",100,255);
		radius_resolution=20;
		taille_resolution=newArray(2,10000);
	}
   }

////////////////////////////////////////////////////////////////Linearite////////////////////////////////////////////


macro "Linearite Action Tool - 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"{
	raz("linearite");
	origid=getImageID();
	dir=getInfo("image.directory");
	Stack.getDimensions(width, height, channels, slices, frames);
	run("Duplicate...", "title=linearite");
	run("8-bit");
	run("Median...", "radius="+radius_linearite);
	run("Auto Local Threshold...", "method=Sauvola radius=15 parameter_1=0 parameter_2=0 white"); //calcul seuillage local
	//seuillage (seuil_linearite,0);
	setAutoThreshold("Default dark");
	run("Analyze Particles...", "size="+taille_linearite[0]+"-"+taille_linearite[1]+" add");
	close();
	selectImage(origid);
	roiManager("Show All");
	run("Fire");
	run("Enhance Contrast...", "saturated=0");
	waitForUser("Selections","Correction des selections");
	setTool("rectangle");
	count=roiManager("count");	
	if (count==16){
	Roi_sort(4,4);
	Roi_fit_16();	
	}
	else if(count==32){
	roiManager("Select", count-1);
	List.setMeasurements;
	angle=List.getValue("FeretAngle");
	roiManager("Deselect");
	if (angle>45&&angle<135) Roi_sort(2,16); //en fonction du l orientation de l image
	else Roi_sort(16,2);
	Roi_fit_32();	
	}
	else {
	exit ("Nombre de Roi incorrect !");	
	}

}

macro 'Linearite Action Tool Options'  {
	Dialog.create("Linearite");
	Dialog.addNumber("Taille du filtre:", radius_linearite);
  	Dialog.addSlider("Surface mini", 1, 100000, taille_linearite[0]);
	Dialog.addSlider("Surface maxi", taille_linearite[0], 100000, taille_linearite[1]);
	Dialog.addCheckbox("Valeurs par defaut", false);
	Dialog.show(); 
	radius_linearite=Dialog.getNumber();	
    taille_linearite[0]=Dialog.getNumber();
	taille_linearite[1]=Dialog.getNumber();	
	if(Dialog.getCheckbox()){
		radius_linearite=2;
		taille_linearite=newArray(200,1000000);
	}
   }


////////////////////////////////////////Geometrie ////////////////////////////////////////////////////////////////////
macro "Geometrie Action Tool - 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"{

	origid=getImageID();
	dir=getInfo("image.directory");
	if (roiManager("count")>0){
			roiManager("Deselect");
			roiManager("Delete");
	}
	run("Select None");
	Stack.getDimensions(width, height, channels, slices, frames);
	getPixelSize(unit, pixelWidth, pixelHeight);
	if (slices==1) slices=frames;
	seuillage (seuil_geometrie,1);
	//setAutoThreshold("Default dark stack");
	Tab_xm=newArray(slices);
	Tab_ym=newArray(slices);
	setBatchMode(true);
	for (i=1; i<=slices; i++) {
		setSlice(i);
		run("Create Selection");
		List.setMeasurements;
		Tab_xm[i-1]=List.getValue("X");
		Tab_ym[i-1]=List.getValue("Y");
		run("Select None");
	}
	resetThreshold();
	//Array.show(Tab_xm);
	//Array.show(Tab_ym);
	
	Tab_entete=newArray(0);	
	Tab_result=newArray(0);
	total=0;
	for (i=1;i<slices;i++){
					delta= sqrt(pow((Tab_xm[i]-Tab_xm[i-1]),2)+pow((Tab_ym[i]-Tab_ym[i-1]),2));
					total=total+delta;
					print ("Decalage "+i+"-"+i+1+" :"+delta+" "+unit);

	
	
	}
	setBatchMode(false);
	decalage_geometrie=total/(slices-1);
	print ("Decalage Moyen : "+decalage_geometrie+" "+unit);
	selectImage (origid);
	setSlice(1);
	run("ROI Manager...");
	for (i=0;i<slices;i++){
		makePoint(Tab_xm[i]/pixelWidth, Tab_ym[i]/pixelWidth);
		//run("Specify...", "width=1 height=1 x="+Tab_xm[i]+" y="+Tab_ym[i]+" slice=1 scaled");
		roiManager("Add");	
	}
	roiManager("Show All");
	
	
	
	

}

macro 'Geometrie Action Tool Options'  {
	Dialog.create("Geometrie");
  	Dialog.addChoice("Seuillage:", newArray("Manuel","Default","Huang","Intermodes","IsoData","IJ_IsoData","Li","MaxEntropy","Mean","MinError","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen"),seuil_geometrie[0]);
	Dialog.show();    
    seuil_geometrie[0]=Dialog.getChoice();
	
   }
   
////////////////////////////////////////////////////////////////PDF////////////////////////////////////////////
   
   
 macro "Rapport_pdf Action Tool - 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"{
 run("Close All");
 dir_rapport=getDirectory("Repertoire de sauvegarde du rapport");
 //////////////////////renseignements/////////

if (!Infos) infos();

 /////////////////////////////////////////////// 
 
 
new_pdf_avec_entete(1);

image_dans_pdf(dir_argoloj,"homogeneite.jpg",700,540,800);
image_dans_pdf(dir_argoloj,"coalignement.jpg",200,1720,1800);
image_dans_pdf(dir_argoloj,"dispersion.jpg",600,2400,1000);

setColor(0, 0, 0);
setFont("SansSerif", 40, "bold");
drawString("Homogénéité", 200, 400);
drawString("Coalignement", 200, 1500);
drawString("Dispersion", 200, 2400);

 /*Array.show(Tab_entete);
 Array.show(Tab_result_moy);*/

setFont("SansSerif", 36);
drawString("Déviation standard normalisée de l'homogénéité: "+std_homo, 200, 480);
drawString("Cannaux", 200, 1580);
drawString("Ecarts"+"("+unit+")", 200, 1640);
drawString("Ref theorique en z", 200, 1700);
for(i=0;i<Tab_entete.length;i++){
	drawString(Tab_entete[i], 200+((i+1)*300), 1580);
	drawString(Tab_result_moy[i], 200+((i+1)*300), 1640);
	drawString(Tab_ref_resolution[i]/1000, 200+((i+1)*300), 1700);
}
/*
for(i=0;i<Tab_entete.length;i++){
	drawString(Tab_entete[i], 200+((i+1)*300), 1580);
	drawString(Tab_result_moy[i]+" "+unit, 200+((i+1)*300), 1640);
	drawString(Tab_ref_resolution[i]+" "+unit, 200+((i+1)*300), 1700);
}
*/
drawString("Distance entre z :"+distance_z_dispersion, 200, 2480);

new_pdf_avec_entete(2);

image_dans_pdf(dir_argoloj,"resolution.jpg",100,520,1800);
image_dans_pdf(dir_argoloj,"linearite16.jpg",100,1350,1800);
image_dans_pdf(dir_argoloj,"linearite32.jpg",100,2080,1800);
setColor(0, 0, 0);
setFont("SansSerif", 40, "bold");
drawString("Résolution", 200, 400);
drawString("Linéarité 16", 200, 1330);
drawString("Linéarité 32", 200, 2080);
drawString("Géometrie", 200, 2830);
setFont("SansSerif", 36);
drawString("Nombre de bandes résolues: "+bande_resolution, 200, 480);
drawString("Decalage Moyen : "+decalage_geometrie+" "+unit, 200, 2930);


fichier_pdf=plateau+datef+"_"+NomMicroscope+"-Obj"+NomObjectif+"_"+"argo_rapport.pdf";

run("PDF Writer", "scale save one save=["+dir_rapport+fichier_pdf+"]");
close();
close();
exec ("open",dir_rapport+fichier_pdf);

}

macro "About These Macros Action Tool - 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"{
open(getDirectory("macros")+"toolsets/MRI_ArgoloJ_toolset.txt");
}









///////////////////////////////////////////////Fonctions /////////////////////////////////////////////////////////////

function Roi_sort(ligne,colonne){
roiManager("Deselect");
count=roiManager("count");
if ((ligne*colonne)!=count) exit("Nombre de selections incorrect !");
   for (j=0; j<ligne; j++) { 	
      for (i=0; i<colonne; i++) {
          roiManager("Select", (j*colonne)+i);
		   getSelectionBounds(x, y, width, height);
		  roiManager("Rename", IJ.pad(j, 4)+"-"+IJ.pad(x, 4));
		  roiManager("Deselect");
          }		  
      }	  
		roiManager("Sort");
		roiManager("UseNames", "true");
		roiManager("UseNames", "false");
		roiManager("Show All");
}


function Roi_fit_16(){
	nom=getTitle();
	 roi_index = newArray(16);
	 roi_mean = newArray(16);
	 roiManager("Select", 15);
	 getStatistics(area, mean);
	 mean_min=mean; 
	for (i=0; i<16; i++) {
		roiManager("Select", i);
		roi_index[i]=i;
		getStatistics(area, mean);
		mean=mean/mean_min;
		roi_mean[i]=mean;
	}
	run("Select None");
	Array.sort(roi_mean);
	Fit.doFit("Straight Line", roi_index, Argo_intensites_16);
	Fit.plot();
	rename("Fit etalonnage");
	print("Valeurs specifique a la lame: "+"a="+d2s(Fit.p(0),6)+", b="+d2s(Fit.p(1),6), ", R^2="+Fit.rSquared);
			  
	Fit.doFit("Straight Line", roi_index, roi_mean);
	Fit.plot();
	rename("Fit "+nom);
	saveAs("Jpeg", dir_argoloj+"linearite16.jpg");
	print("a="+d2s(Fit.p(0),6)+", b="+d2s(Fit.p(1),6), ", R^2="+Fit.rSquared); 
	  
}

function Roi_fit_32(){
	 	nom=getTitle();
	 roi_index_d = newArray(16);
	 roi_mean_d = newArray(16);
	 roi_index_m = newArray(16);
	 roi_mean_m = newArray(16);
	 roiManager("Select", 0);
	 getStatistics(area, mean);
	 mean_min_d=mean; 
	 roiManager("Select", 31);
	 getStatistics(area, mean);
	 mean_min_m=mean; 
	for (i=0; i<16; i++) {
		roiManager("Select", 2*i);
		roi_index_d[i]=i;
		getStatistics(area, mean);
		mean=mean/mean_min_d;
		roi_mean_d[i]=mean;
		roiManager("Select", (2*i)+1);
		roi_index_m[i]=i;
		getStatistics(area, mean);
		mean=mean/mean_min_m;
		roi_mean_m[i]=mean;
	}
	run("Select None");
		
	Array.sort(roi_mean_d);
	Array.sort(roi_mean_m);
	 
	Fit.doFit("Straight Line", roi_index_d, Argo_intensites_32);
	  Fit.plot();
	  rename("Fit etalonnage");
	  print("Valeurs specifique a la lame: "+"a="+d2s(Fit.p(0),6)+", b="+d2s(Fit.p(1),6), ", R^2="+Fit.rSquared);

	  Fit.doFit("Straight Line", roi_index_d, roi_mean_d);
	  Fit.plot();
	  rename("Fit "+nom+"_1");
	  print("Valeurs premiere colonne: "+"a="+d2s(Fit.p(0),6)+", b="+d2s(Fit.p(1),6), ", R^2="+Fit.rSquared);
	  Fit.doFit("Straight Line", roi_index_m, roi_mean_m);
	  Fit.plot();
	  rename("Fit "+nom+"_2");
	  saveAs("Jpeg", dir_argoloj+"linearite32.jpg");
	  print("Valeurs deuxieme colonne: "+"a="+d2s(Fit.p(0),6)+", b="+d2s(Fit.p(1),6), ", R^2="+Fit.rSquared);
	  
}

//remise a zero
function raz(titre){
	run("Clear Results");
	origid=getImageID();
	if (isOpen(titre)){
		selectWindow(titre);
		close();
	}
	if (roiManager("count")>0){
			roiManager("Deselect");
			roiManager("Delete");
	}
	selectImage(origid);
	run("Select None");
}


function tableau_fenetre_texte(titre,colonne){
	selectWindow(titre);
	str = getInfo("window.contents");
	extraction = newArray(0);
	lines=split(str, "\n");   // split  d un fichier texte en lignes
	for(i=1; i<lines.length; i++) {		
		line = lines[i];				
		columns = split(line, "\t");	
		extract = parseFloat(columns[colonne]);											
		extraction = Array.concat(extraction, extract);
		}
		return extraction;
	}

	
function seuillage (seuils,stack){
	if(seuils[0]=="Manuel"){
		run("Threshold...");
		waitForUser("Seuillage","Reglage du Seuil");
		getThreshold(lower, upper);
		seuils[1]=lower;
		seuils[2]=upper;	
	} else {	
		if(stack==1){
			setSlice( nSlices/2);
			setAutoThreshold(seuils[0]+" dark");		
		}
		if(stack==0) setAutoThreshold(seuils[0]+" dark");	
	}		
}


function seuillage (seuils,stack){
	if(seuils[0]=="Manuel"){
		run("Threshold...");
		waitForUser("Seuillage","Reglage du Seuil");
		getThreshold(lower, upper);
		seuils[1]=lower;
		seuils[2]=upper;	
	} else {	
		if(stack==1) setAutoThreshold(seuils[0]+" dark stack");
		if(stack==0) setAutoThreshold(seuils[0]+" dark");	
	}		
}



function image_dans_pdf(dir,nom,x,y,w){
	origid=getImageID();
	if (File.exists(dir+nom)){
	open(dir+nom);
	run("Size...", "width="+w+" constrain average interpolation=Bilinear");
	getDimensions(width, height, channels, slices, frames);
	run("Select All");
	run("Copy");
	close();
	selectImage(origid);
	makeRectangle(x, y, width, height);
	run("Paste");
	run("Select None");
	}
}

function new_pdf_avec_entete(page){
	newImage("rapport"+page, "RGB white", 2127, 3072, 1);
	image_dans_pdf(dir_argoloj,"logo_entete_mri.jpg",14,44,2100);
	setColor(0, 0, 0);
	setFont("SansSerif", 40, "bold");
	drawString("Argolight Métrologie", 689, 104);
	setFont("SansSerif", 36);
	drawString("Microscope :"+NomMicroscope, 350, 170);
	drawString("Objectif :"+NomObjectif, 350, 220);
	waveString="";
	for(i=0;i<wave.length;i++){
		if (wave[i]!="none") waveString=waveString+" "+wave[i];	
	}
	
	drawString("Longueurs d'ondes :"+waveString, 350, 270);
	

	 
	drawString("Page :"+page, 1570, 120);
	drawString("Date :"+date, 1570, 170);
	drawString("Plateau :"+plateau, 1570, 220);
	drawString("Vérificateur :"+NomVerificateur, 1570, 270);
	

}

function efface_images_temp(){
File.delete(dir_argoloj+"homogeneite.jpg");
	File.delete(dir_argoloj+"resolution.jpg");
	File.delete(dir_argoloj+"dispersion.jpg");
	File.delete(dir_argoloj+"linearite32.jpg");
	File.delete(dir_argoloj+"linearite16.jpg");
	File.delete(dir_argoloj+"coalignement.jpg");
	selectWindow("Log");
	run("Close"); 

}

function validation_nombre(titre,nombre,min,max){
	Dialog.create("Validation");
  Dialog.addSlider(titre, min, max, nombre); //"Number of cells:"
  Dialog.show();
  nombre= Dialog.getNumber();
  return nombre;
}

function infos(){

	/*var plateau=RecupPlateau();
	var NomMicroscope="";
	var TypeMicroscope="";
	var NomObjectif="";
	var NaObjectif="";
	var NomVerificateur="";
	//var Fluo="";
	var wave=newArray(0); //tableau des longueurs d ondes
	var wave_value=newArray(0);*/
	
	Dialog.create("Repertoire pour les resultats");
	Dialog.addCheckbox(dir_argoloj, true);	
	Dialog.show();
	if(!Dialog.getCheckbox()) dir_argoloj=getDirectory("Repertoire pour les resultats");

	Dialog.create("Choix du verificateur");
	tab=RecupNom("Verificateur");
	Dialog.addChoice("Nom du verificateur ",tab,NomVerificateur);
	Dialog.show();
	NomVerificateur = Dialog.getChoice();


	Dialog.create("Choix du microscope");
	tab=RecupNom("Microscope");
	Dialog.addChoice("Nom du microscope ",tab,NomMicroscope);
	Dialog.show();
	NomMicroscope = Dialog.getChoice();


	Dialog.create("Choix de l objectif");
	tab=Recup2Nom("Objectif",NomMicroscope);
	Dialog.addChoice("Nom de l objectif ",tab,NomObjectif);
	Dialog.show();
	NomObjectif = Dialog.getChoice();



	Dialog.create("Choix des longueurs d ondes");
	tab=Recup2Nom("Fluo",NomMicroscope);
	tab=Array.concat("none",tab);
	for (i=0;i<tab.length-1;i++){
		defaut="";
		if (wave.length>i) defaut=wave[i];
		Dialog.addChoice("Cannal "+i+1,tab,defaut);
	}
	Dialog.show();
	wave=newArray(0);
	for (i=0;i<tab.length-1;i++){
		wave=Array.concat(wave,Dialog.getChoice);
		}
	
	Recup_info();
}

function RecupPlateau(){
lines=split(File.openAsString(param), "\n");
row=split(lines[0],";");
return row[1];
}

function RecupNom(nom){
	tab=newArray(0);
	lines=split(File.openAsString(param), "\n");
	for (i=0;i<lines.length;i++){
		row=split(lines[i],";");
		if (row[0]==nom) tab=Array.concat(tab,row[1]);
	}
	return tab;
}


function Recup2Nom(nom,microscope){
	tab=newArray(0);
	lines=split(File.openAsString(param), "\n");
	for (i=0;i<lines.length;i++){
		row=split(lines[i],";");
		if (row[1]==microscope){
			for (j=i;j<lines.length;j++){
				row=split(lines[j],";");
				if (row[0]==nom) tab=Array.concat(tab,row[1]);
				if (row[0]=="end") j=lines.length;
			}		
		} 

}
return tab;	
}

function Recup_info(){
	wave_value=newArray(wave.length);
	lines=split(File.openAsString(param), "\n");
	for (i=0;i<lines.length;i++){
		row=split(lines[i],";");
		if (row[1]==NomMicroscope) {
			TypeMicroscope=row[2];
			for (j=i;j<lines.length;j++){
				row=split(lines[j],";");
				if (row[1]==NomObjectif) NaObjectif=row[2];
				for (k=0;k<wave.length;k++){
					if (wave[k]==row[1]) wave_value[k]=row[2];			
				}
				if (row[0]=="end") j=lines.length;
			
			}		
			
		}	
	}
	Infos=true;
}


function raz_variables(){
	 dir_argoloj=getDirectory("macros")+"toolsets\\ArgoloJ\\";
	 param=dir_argoloj+"parametres_microscopes.csv";
	 plateau=RecupPlateau();
	 NomMicroscope="";
	 TypeMicroscope="";
	 NomObjectif="";
	 NaObjectif="";
	 NomVerificateur="";
	// Fluo="";
	 wave=newArray(0); //tableau des longueurs d ondes
	 wave_value=newArray(0);
	 Infos=false;
	 zero="Oui";
	 date="";
	 datef="";
	//Valeurs d etalonnage donnees par argolight avec la lame
	 Argo_intensites_16 = newArray(1,1.49,2.18,2.99,3.71,4.46,5.18,5.79,6.27,6.88,7.4,7.85,8.18,8.65,9.1,9.55);
	 Argo_intensites_32 = newArray(1,1.52,2.23,3.07,3.91,4.68,5.41,6.05,6.64,7.25,7.78,8.25,8.71,9.18,9.63,10.02);

	 title1 = "Resultats Argolight";
	 title2 = "["+title1+"]";
	 fe = title2;

	// parametres par defaut
	 seuil_calibration=newArray("Li",100,255);
	 seuil_homogeneite=newArray("Otsu",100,255);
	 seuil_coalignement_tot=newArray("Default",100,255);
	 seuil_coalignement=newArray("Yen",100,255);
	 seuil_dispersion=newArray("Minimum",100,255);
	 seuil_resolution=newArray("Default",100,255);
	 seuil_geometrie=newArray("Default",100,255);
	 radius_calibration=1;
	 radius_homogeneite=1;
	 radius_coalignement=2;
	 radius_dispersion=3;
	 radius_resolution=20;
	 radius_linearite=2;
	 taille_calibration=newArray(50,500);
	 taille_homogeneite=newArray(20,100);
	 taille_coalignement=newArray(0.5,10,1);
	 taille_resolution=newArray(2,10000);
	 taille_linearite=newArray(200,1000000);
	 
	 croix=false;

	//Resultats
	// distance_calibration=0;
	// std_calibration=0;
	 std_homo=0;
	 Tab_entete=newArray(0);	
	 Tab_result_moy=newArray(0);
	 distance_z_dispersion=0;
	 bande_resolution=0;
	 decalage_geometrie=0;
	 unit=0;
}


